PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychopy
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instruksi
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    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Kamu akan melihat sekumpulan ikan di layar.

            Tugasmu: lihat ikan yang ada di TENGAH.

            Ikan tengah menghadap KIRI → tekan tombol KIRI
            Ikan tengah menghadap KANAN → tekan tombol KANAN

            Abaikan ikan-ikan yang lain!

            Tekan SPASI untuk mulai latihan.
    KeyboardComponent instr_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    KeyboardComponent response
      allowedKeys = 'left','right'
      correctAns = $correct_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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    ImageComponent fish_stim
      image [set every repeat] = $image_file
      size = (0.9, 0.2)
      startVal [time (s)] = 0.5
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  Routine feedback
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    TextComponent feedback_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $'Benar!' if response.corr else 'Salah'
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  Routine ready
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    TextComponent ready_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Latihan selesai!

        Sekarang tes yang sebenarnya.

        Tekan SPASI untuk mulai.
    KeyboardComponent ready_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine break_3
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    TextComponent break_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Istirahat sebentar.
        Tekan SPASI untuk lanjut ke bagian 2.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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      text:
        Selesai!
        Terima kasih sudah berpartisipasi.
Flow
  Routine instruksi
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trial_type': 'congruent', 'target_dir': 'left', 'correct_resp': 'left', 'image_file': 'congruent_left.png'},
      {'trial_type': 'congruent', 'target_dir': 'right', 'correct_resp': 'right', 'image_file': 'congruent_right.png'},
      {'trial_type': 'incongruent', 'target_dir': 'left', 'correct_resp': 'left', 'image_file': 'incongruent_left.png'},
      {'trial_type': 'incongruent', 'target_dir': 'right', 'correct_resp': 'right', 'image_file': 'incongruent_left.png'}]
    Routine trial
    Routine feedback
  LoopTerminator practice_loop
  Routine ready
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 8
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    conditions:
      [{'trial_type': 'congruent', 'target_dir': 'left', 'correct_resp': 'left', 'image_file': 'congruent_left.png'},
      {'trial_type': 'congruent', 'target_dir': 'right', 'correct_resp': 'right', 'image_file': 'congruent_right.png'},
      {'trial_type': 'incongruent', 'target_dir': 'left', 'correct_resp': 'left', 'image_file': 'incongruent_left.png'},
      {'trial_type': 'incongruent', 'target_dir': 'right', 'correct_resp': 'right', 'image_file': 'incongruent_left.png'}]
    Routine trial
  LoopTerminator main_loop
  Routine break_3
  LoopInitiator main_loop2 loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 7
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    conditions:
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    Routine trial
  LoopTerminator main_loop2
  Routine end
